<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:al="clr-namespace:Bonsai.Audio;assembly=Bonsai.Audio"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:p1="clr-namespace:Bonsai.PulsePal;assembly=Bonsai.PulsePal"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>4</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>NumBlocks</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="TimeSpanProperty">
          <Value>PT20S</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>TotalTime</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>BonsaiStarted</Name>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>StartOnPress</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>Space</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="scr:PythonSource">
              <scr:Script>@returns(bool)
def generate():
  yield True</scr:Script>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SkipUntil" />
            </Expression>
            <Expression xsi:type="scr:PythonSource">
              <scr:Script>@returns(bool)
def generate():
  yield False</scr:Script>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DistinctUntilChanged" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="6" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>ExperimentStarted</Name>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>CreateTimer</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>ExperimentStarted</Name>
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="scr:PythonTransform">
                    <scr:Script>@returns(bool)
def process(value):
  if value:
    return True
  else:
    return</scr:Script>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Timestamp</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0S</rx:DueTime>
                <rx:Period>PT0.01S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Timestamp</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Subtract" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="8" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>TimeSinseStart</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="al:AudioReader">
          <al:FileName>C:\Users\rory\repos\bonsai_fear_conditioning\static\whitenoise.wav</al:FileName>
          <al:BufferLength>10</al:BufferLength>
        </Combinator>
      </Expression>
      <Expression xsi:type="ReplaySubject">
        <Name>ContextOneTone</Name>
        <BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="al:AudioReader">
          <al:FileName>C:\Users\rory\repos\bonsai_fear_conditioning\static\tone_10hz.wav</al:FileName>
          <al:BufferLength>10</al:BufferLength>
        </Combinator>
      </Expression>
      <Expression xsi:type="ReplaySubject">
        <Name>ContextTwoTone</Name>
        <BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LoadImage">
          <cv:FileName>C:\Users\rory\repos\bonsai_fear_conditioning\static\images\plain-white-background.jpg</cv:FileName>
          <cv:Mode>Unchanged</cv:Mode>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>DefaultImage</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LoadImage">
          <cv:FileName>C:\Users\rory\repos\bonsai_fear_conditioning\static\images\rainbow.jpg</cv:FileName>
          <cv:Mode>Unchanged</cv:Mode>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>ContextOneImage</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LoadImage">
          <cv:FileName>C:\Users\rory\repos\bonsai_fear_conditioning\static\images\grey.jpg</cv:FileName>
          <cv:Mode>Unchanged</cv:Mode>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>ContextTwoImage</Name>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>ControlContext</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>TimeSinseStart</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TotalSeconds</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TotalTime</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TotalSeconds</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>NumBlocks</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="scr:PythonTransform">
              <scr:Script>@returns(str)
def process(value):
  total_time, curr_time, num_blocks = value
  if curr_time &lt; 0.001 or curr_time is None:
    return ""
  interval = float(total_time) / float(num_blocks)
  change_times = [interval * i for i in range(num_blocks)]

  for i in change_times[::2]:
    lower = i
    upper = change_times[change_times.index(i) + 1]
    if curr_time &gt;= lower and curr_time &lt; upper:
      return "context_one"
  else:
    return "context_two"</scr:Script>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DistinctUntilChanged" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="5" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source3" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>WhichContext</Name>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>ControlIsContextOne</Name>
        <Description>Generates a boolean sequence denoting start and stop points for audio playback</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>TimeSinseStart</Name>
            </Expression>
            <Expression xsi:type="GreaterThanOrEqual">
              <Operand xsi:type="TimeSpanProperty">
                <Value>PT0S</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TotalTime</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="LessThanOrEqual">
              <Operand xsi:type="TimeSpanProperty">
                <Value>PT20S</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="LogicalAnd" />
            <Expression xsi:type="SubscribeSubject">
              <Name>WhichContext</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DistinctUntilChanged" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>context_one</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="StringProperty">
                <Value>context_one</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="1" To="5" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="8" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="14" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>IsContextOne</Name>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>ControlIsContextTwo</Name>
        <Description>Generates a boolean sequence denoting start and stop points for audio playback</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>TimeSinseStart</Name>
            </Expression>
            <Expression xsi:type="GreaterThanOrEqual">
              <Operand xsi:type="TimeSpanProperty">
                <Value>PT0S</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TotalTime</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="LessThanOrEqual">
              <Operand xsi:type="TimeSpanProperty">
                <Value>PT20S</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="LogicalAnd" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>context_two</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>WhichContext</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DistinctUntilChanged" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="StringProperty">
                <Value>context_two</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="1" To="5" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="10" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="14" Label="Source2" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>IsContextTwo</Name>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>ControlVideo</Name>
        <Description>Generates a boolean sequence denoting start and stop points for video recording</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>TimeSinseStart</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TotalTime</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="LessThanOrEqual">
              <Operand xsi:type="TimeSpanProperty">
                <Value>PT20S</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="GreaterThanOrEqual">
              <Operand xsi:type="TimeSpanProperty">
                <Value>PT0S</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="LogicalAnd" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DistinctUntilChanged" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>VideoStartTime</Name>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>ControlMiniscope</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>TotalTime</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TimeSinseStart</Name>
            </Expression>
            <Expression xsi:type="GreaterThanOrEqual">
              <Operand xsi:type="TimeSpanProperty">
                <Value>PT0S</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="LessThanOrEqual">
              <Operand xsi:type="TimeSpanProperty">
                <Value>PT20S</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="LogicalAnd" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DistinctUntilChanged" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="2" To="4" Label="Source2" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>MiniscopeOn</Name>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>ControlAudio</Name>
        <Description>Generates a boolean sequence denoting start and stop points for picture presentations</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="NestedWorkflow">
              <Name>ExperimentOn</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TimeSinseStart</Name>
                  </Expression>
                  <Expression xsi:type="GreaterThanOrEqual">
                    <Operand xsi:type="TimeSpanProperty">
                      <Value>PT0S</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TotalTime</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="LessThanOrEqual">
                    <Operand xsi:type="TimeSpanProperty">
                      <Value>PT20S</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="LogicalAnd" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="4" Label="Source1" />
                  <Edge From="1" To="5" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>IsContextOne</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>IsContextTwo</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="scr:PythonTransform">
              <scr:Script>@returns(str)
def process(value):
  exp_on, is_c1, is_c2 = value
  
  if not exp_on:
    return "default"
  if is_c1:
    return "context_one"
  if is_c2:
    return "context_two"</scr:Script>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DistinctUntilChanged" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="3" Label="Source2" />
            <Edge From="2" To="3" Label="Source3" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>WhichTone</Name>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>ControlImages</Name>
        <Description>Generates a boolean sequence denoting start and stop points for picture presentations</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="NestedWorkflow">
              <Name>ExperimentOn</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TimeSinseStart</Name>
                  </Expression>
                  <Expression xsi:type="GreaterThanOrEqual">
                    <Operand xsi:type="TimeSpanProperty">
                      <Value>PT0S</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TotalTime</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="LessThanOrEqual">
                    <Operand xsi:type="TimeSpanProperty">
                      <Value>PT20S</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="LogicalAnd" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="4" Label="Source1" />
                  <Edge From="1" To="5" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>IsContextOne</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>IsContextTwo</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="scr:PythonTransform">
              <scr:Script>@returns(str)
def process(value):
  exp_on, is_c1, is_c2 = value
  
  if not exp_on:
    return "default"
  if is_c1:
    return "context_one"
  if is_c2:
    return "context_two"</scr:Script>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DistinctUntilChanged" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="3" Label="Source2" />
            <Edge From="2" To="3" Label="Source3" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>WhichImage</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="NestedWorkflow">
          <Name>PlayAudioOld</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="SubscribeSubject">
                <Name>AudioOn</Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:CombineLatest" />
              </Expression>
              <Expression xsi:type="Condition">
                <Name>CheckIfAudioOn</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>Item2</Selector>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Item1</Selector>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="al:AudioPlayback">
                  <al:SourceName />
                  <al:SampleRate>44100</al:SampleRate>
                </Combinator>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
              <Expression xsi:type="SubscribeSubject">
                <Name>WhichTone</Name>
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>ContextOneTone</Name>
              </Expression>
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="2" To="3" Label="Source1" />
              <Edge From="3" To="4" Label="Source1" />
              <Edge From="4" To="5" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>PresentImages</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>ContextOneImage</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DefaultImage</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ContextTwoImage</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>WhichImage</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="scr:PythonTransform">
              <scr:Script>import clr
clr.AddReference("OpenCV.Net")
from OpenCV.Net import *


@returns(IplImage)
def process(value):
  image_to_present, default, c1, c2 = value

  if image_to_present == "default":
    return default
  if image_to_present == "context_one":
    return c1
  if image_to_present == "context_two":
    return c2</scr:Script>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="4" Label="Source3" />
            <Edge From="1" To="4" Label="Source2" />
            <Edge From="2" To="4" Label="Source4" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>RecordVideo</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:CameraCapture">
                <cv:Index>0</cv:Index>
                <cv:CaptureProperties />
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>VideoStartTime</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>IsInvalid</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>C:\Users\rory\repos\bonsai_fear_conditioning\output\context_switch_one_frame_timestamps.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>true</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:VideoWriter">
                <cv:FileName>C:\Users\rory\repos\bonsai_fear_conditioning\output\context_switch_one.avi</cv:FileName>
                <cv:Suffix>None</cv:Suffix>
                <cv:Buffered>true</cv:Buffered>
                <cv:Overwrite>true</cv:Overwrite>
                <cv:FourCC>FMP4</cv:FourCC>
                <cv:FrameRate>30</cv:FrameRate>
                <cv:FrameSize>
                  <cv:Width>0</cv:Width>
                  <cv:Height>0</cv:Height>
                </cv:FrameSize>
                <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="4" To="8" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="NestedWorkflow">
          <Name> WriteEvents</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="SubscribeSubject">
                <Name>ExperimentStarted</Name>
              </Expression>
              <Expression xsi:type="Condition">
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="NestedWorkflow">
                <Name>name_and_timestamp</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Timestamp" />
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="StringProperty">
                        <Value>experiment_start</Value>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Zip" />
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>Item1,Item2.Timestamp</Selector>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="0" To="2" Label="Source1" />
                    <Edge From="1" To="3" Label="Source2" />
                    <Edge From="2" To="3" Label="Source1" />
                    <Edge From="3" To="4" Label="Source1" />
                    <Edge From="4" To="5" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>BonsaiStarted</Name>
              </Expression>
              <Expression xsi:type="NestedWorkflow">
                <Name>name_and_timestamp</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:DistinctUntilChanged" />
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Timestamp" />
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="StringProperty">
                        <Value>bonsai_start</Value>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Zip" />
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>Item1,Item2.Timestamp</Selector>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                    <Edge From="1" To="3" Label="Source1" />
                    <Edge From="2" To="4" Label="Source2" />
                    <Edge From="3" To="4" Label="Source1" />
                    <Edge From="4" To="5" Label="Source1" />
                    <Edge From="5" To="6" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>AudioOn</Name>
              </Expression>
              <Expression xsi:type="Condition">
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="NestedWorkflow">
                <Name>name_and_timestamp</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Timestamp" />
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="StringProperty">
                        <Value>audio_on</Value>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Zip" />
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>Item1,Item2.Timestamp</Selector>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="0" To="2" Label="Source1" />
                    <Edge From="1" To="3" Label="Source2" />
                    <Edge From="2" To="3" Label="Source1" />
                    <Edge From="3" To="4" Label="Source1" />
                    <Edge From="4" To="5" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>AudioOn</Name>
              </Expression>
              <Expression xsi:type="Condition">
                <Name>AudioOff</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="scr:PythonTransform">
                      <scr:Name>Not</scr:Name>
                      <scr:Script>@returns(bool)
def process(value):
  return not value</scr:Script>
                    </Expression>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>TimeSinseStart</Name>
                    </Expression>
                    <Expression xsi:type="GreaterThan">
                      <Operand xsi:type="TimeSpanProperty">
                        <Value>PT1S</Value>
                      </Operand>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:CombineLatest" />
                    </Expression>
                    <Expression xsi:type="LogicalAnd" />
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="4" Label="Source1" />
                    <Edge From="2" To="3" Label="Source1" />
                    <Edge From="3" To="4" Label="Source2" />
                    <Edge From="4" To="5" Label="Source1" />
                    <Edge From="5" To="6" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="NestedWorkflow">
                <Name>name_and_timestamp</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Timestamp" />
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="StringProperty">
                        <Value>audio_off</Value>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Zip" />
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>Item1,Item2.Timestamp</Selector>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="0" To="2" Label="Source1" />
                    <Edge From="1" To="3" Label="Source2" />
                    <Edge From="2" To="3" Label="Source1" />
                    <Edge From="3" To="4" Label="Source1" />
                    <Edge From="4" To="5" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>PicturePresentationTimes</Name>
              </Expression>
              <Expression xsi:type="Condition">
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="NestedWorkflow">
                <Name>name_and_timestamp</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Timestamp" />
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="StringProperty">
                        <Value>picture_on</Value>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Zip" />
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>Item1,Item2.Timestamp</Selector>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="0" To="2" Label="Source1" />
                    <Edge From="1" To="3" Label="Source2" />
                    <Edge From="2" To="3" Label="Source1" />
                    <Edge From="3" To="4" Label="Source1" />
                    <Edge From="4" To="5" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>AudioOn</Name>
              </Expression>
              <Expression xsi:type="Condition">
                <Name>PictureOff</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="scr:PythonTransform">
                      <scr:Name>Not</scr:Name>
                      <scr:Script>@returns(bool)
def process(value):
  return not value</scr:Script>
                    </Expression>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>TimeSinseStart</Name>
                    </Expression>
                    <Expression xsi:type="GreaterThan">
                      <Operand xsi:type="TimeSpanProperty">
                        <Value>PT1S</Value>
                      </Operand>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:CombineLatest" />
                    </Expression>
                    <Expression xsi:type="LogicalAnd" />
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="4" Label="Source1" />
                    <Edge From="2" To="3" Label="Source1" />
                    <Edge From="3" To="4" Label="Source2" />
                    <Edge From="4" To="5" Label="Source1" />
                    <Edge From="5" To="6" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="NestedWorkflow">
                <Name>name_and_timestamp</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Timestamp" />
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="StringProperty">
                        <Value>picture_off</Value>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Zip" />
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>Item1,Item2.Timestamp</Selector>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="0" To="2" Label="Source1" />
                    <Edge From="1" To="3" Label="Source2" />
                    <Edge From="2" To="3" Label="Source1" />
                    <Edge From="3" To="4" Label="Source1" />
                    <Edge From="4" To="5" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>MiniscopeOn</Name>
              </Expression>
              <Expression xsi:type="Condition">
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="NestedWorkflow">
                <Name>name_and_timestamp</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Timestamp" />
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="StringProperty">
                        <Value>miniscope_on</Value>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Zip" />
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>Item1,Item2.Timestamp</Selector>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="0" To="2" Label="Source1" />
                    <Edge From="1" To="3" Label="Source2" />
                    <Edge From="2" To="3" Label="Source1" />
                    <Edge From="3" To="4" Label="Source1" />
                    <Edge From="4" To="5" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>MiniscopeOn</Name>
              </Expression>
              <Expression xsi:type="Condition">
                <Name>MiniscopeOff</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="scr:PythonTransform">
                      <scr:Name>Not</scr:Name>
                      <scr:Script>@returns(bool)
def process(value):
  return not value</scr:Script>
                    </Expression>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>TimeSinseStart</Name>
                    </Expression>
                    <Expression xsi:type="GreaterThan">
                      <Operand xsi:type="TimeSpanProperty">
                        <Value>PT1S</Value>
                      </Operand>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:CombineLatest" />
                    </Expression>
                    <Expression xsi:type="LogicalAnd" />
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="4" Label="Source1" />
                    <Edge From="2" To="3" Label="Source1" />
                    <Edge From="3" To="4" Label="Source2" />
                    <Edge From="4" To="5" Label="Source1" />
                    <Edge From="5" To="6" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="NestedWorkflow">
                <Name>name_and_timestamp</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Timestamp" />
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="StringProperty">
                        <Value>miniscope_off</Value>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Zip" />
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>Item1,Item2.Timestamp</Selector>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="0" To="2" Label="Source1" />
                    <Edge From="1" To="3" Label="Source2" />
                    <Edge From="2" To="3" Label="Source1" />
                    <Edge From="3" To="4" Label="Source1" />
                    <Edge From="4" To="5" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>VideoStartTime</Name>
              </Expression>
              <Expression xsi:type="Condition">
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="NestedWorkflow">
                <Name>name_and_timestamp</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Timestamp" />
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="StringProperty">
                        <Value>video_on</Value>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Zip" />
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>Item1,Item2.Timestamp</Selector>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="0" To="2" Label="Source1" />
                    <Edge From="1" To="3" Label="Source2" />
                    <Edge From="2" To="3" Label="Source1" />
                    <Edge From="3" To="4" Label="Source1" />
                    <Edge From="4" To="5" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>VideoStartTime</Name>
              </Expression>
              <Expression xsi:type="Condition">
                <Name>VideoOff</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="scr:PythonTransform">
                      <scr:Name>Not</scr:Name>
                      <scr:Script>@returns(bool)
def process(value):
  return not value</scr:Script>
                    </Expression>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>TimeSinseStart</Name>
                    </Expression>
                    <Expression xsi:type="GreaterThan">
                      <Operand xsi:type="TimeSpanProperty">
                        <Value>PT1S</Value>
                      </Operand>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:CombineLatest" />
                    </Expression>
                    <Expression xsi:type="LogicalAnd" />
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="4" Label="Source1" />
                    <Edge From="2" To="3" Label="Source1" />
                    <Edge From="3" To="4" Label="Source2" />
                    <Edge From="4" To="5" Label="Source1" />
                    <Edge From="5" To="6" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="NestedWorkflow">
                <Name>name_and_timestamp</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Timestamp" />
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="StringProperty">
                        <Value>video_off</Value>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Zip" />
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>Item1,Item2.Timestamp</Selector>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="0" To="2" Label="Source1" />
                    <Edge From="1" To="3" Label="Source2" />
                    <Edge From="2" To="3" Label="Source1" />
                    <Edge From="3" To="4" Label="Source1" />
                    <Edge From="4" To="5" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>GridOn</Name>
              </Expression>
              <Expression xsi:type="Condition">
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="NestedWorkflow">
                <Name>name_and_timestamp</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Timestamp" />
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="StringProperty">
                        <Value>shockgrid_on</Value>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Zip" />
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>Item1,Item2.Timestamp</Selector>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="0" To="2" Label="Source1" />
                    <Edge From="1" To="3" Label="Source2" />
                    <Edge From="2" To="3" Label="Source1" />
                    <Edge From="3" To="4" Label="Source1" />
                    <Edge From="4" To="5" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>GridOn</Name>
              </Expression>
              <Expression xsi:type="Condition">
                <Name>ShockGridOff</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="scr:PythonTransform">
                      <scr:Name>Not</scr:Name>
                      <scr:Script>@returns(bool)
def process(value):
  return not value</scr:Script>
                    </Expression>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>TimeSinseStart</Name>
                    </Expression>
                    <Expression xsi:type="GreaterThan">
                      <Operand xsi:type="TimeSpanProperty">
                        <Value>PT1S</Value>
                      </Operand>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:CombineLatest" />
                    </Expression>
                    <Expression xsi:type="LogicalAnd" />
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="4" Label="Source1" />
                    <Edge From="2" To="3" Label="Source1" />
                    <Edge From="3" To="4" Label="Source2" />
                    <Edge From="4" To="5" Label="Source1" />
                    <Edge From="5" To="6" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="NestedWorkflow">
                <Name>name_and_timestamp</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Timestamp" />
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="StringProperty">
                        <Value>shockgrid_off</Value>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Zip" />
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>Item1,Item2.Timestamp</Selector>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="0" To="2" Label="Source1" />
                    <Edge From="1" To="3" Label="Source2" />
                    <Edge From="2" To="3" Label="Source1" />
                    <Edge From="3" To="4" Label="Source1" />
                    <Edge From="4" To="5" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Merge" />
              </Expression>
              <Expression xsi:type="io:CsvWriter">
                <io:FileName>C:\Users\rory\repos\bonsai_fear_conditioning\output\condition_two_events.csv</io:FileName>
                <io:Append>false</io:Append>
                <io:Overwrite>true</io:Overwrite>
                <io:Suffix>None</io:Suffix>
                <io:IncludeHeader>false</io:IncludeHeader>
              </Expression>
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="2" To="35" Label="Source2" />
              <Edge From="3" To="4" Label="Source1" />
              <Edge From="4" To="35" Label="Source1" />
              <Edge From="5" To="6" Label="Source1" />
              <Edge From="6" To="7" Label="Source1" />
              <Edge From="7" To="35" Label="Source3" />
              <Edge From="8" To="9" Label="Source1" />
              <Edge From="9" To="10" Label="Source1" />
              <Edge From="10" To="35" Label="Source4" />
              <Edge From="11" To="12" Label="Source1" />
              <Edge From="12" To="13" Label="Source1" />
              <Edge From="13" To="35" Label="Source5" />
              <Edge From="14" To="15" Label="Source1" />
              <Edge From="15" To="16" Label="Source1" />
              <Edge From="16" To="35" Label="Source6" />
              <Edge From="17" To="18" Label="Source1" />
              <Edge From="18" To="19" Label="Source1" />
              <Edge From="19" To="35" Label="Source7" />
              <Edge From="20" To="21" Label="Source1" />
              <Edge From="21" To="22" Label="Source1" />
              <Edge From="22" To="35" Label="Source8" />
              <Edge From="23" To="24" Label="Source1" />
              <Edge From="24" To="25" Label="Source1" />
              <Edge From="25" To="35" Label="Source9" />
              <Edge From="26" To="27" Label="Source1" />
              <Edge From="27" To="28" Label="Source1" />
              <Edge From="28" To="35" Label="Source10" />
              <Edge From="29" To="30" Label="Source1" />
              <Edge From="30" To="31" Label="Source1" />
              <Edge From="31" To="35" Label="Source11" />
              <Edge From="32" To="33" Label="Source1" />
              <Edge From="33" To="34" Label="Source1" />
              <Edge From="34" To="35" Label="Source12" />
              <Edge From="35" To="36" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="NestedWorkflow">
          <Name>TriggerMiniscopeToRecord</Name>
          <Description>Sends a signal a pulse pal to send a 10v signal to an inscopix box</Description>
          <Workflow>
            <Nodes>
              <Expression xsi:type="SubscribeSubject">
                <Name>MiniscopeOn</Name>
              </Expression>
              <Expression xsi:type="Condition">
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="p1:TriggerOutput">
                  <p1:Channels>0</p1:Channels>
                </Combinator>
              </Expression>
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="NestedWorkflow">
          <Name>TriggerShockGrid</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="SubscribeSubject">
                <Name>GridOn</Name>
              </Expression>
              <Expression xsi:type="Condition">
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="p1:TriggerOutput">
                  <p1:Channels>0</p1:Channels>
                </Combinator>
              </Expression>
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>PlayAudio</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>ContextOneTone</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>WhichTone</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:DistinctUntilChanged" />
                  </Expression>
                  <Expression xsi:type="scr:PythonTransform">
                    <scr:Script>@returns(bool)
def process(value):
  return value == "context_one"</scr:Script>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="al:AudioPlayback">
                <al:SourceName />
                <al:SampleRate>44100</al:SampleRate>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>WhichTone</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ContextTwoTone</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:DistinctUntilChanged" />
                  </Expression>
                  <Expression xsi:type="scr:PythonTransform">
                    <scr:Script>@returns(bool)
def process(value):
  return value == "context_two"</scr:Script>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="al:AudioPlayback">
                <al:SourceName />
                <al:SampleRate>44100</al:SampleRate>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="12" Label="Source2" />
            <Edge From="6" To="8" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>